PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1440, 900]
  expName = magnocellular_stimuli
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine Magnocelular_test
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.iohub import launchHubServer
        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        periphereal_region_diameter = 0.8
      Begin Routine:
        import math
        import random

        def calcular_posicion_stim(diameter=1):
            radius = diameter/2

            # Generar un ángulo aleatorio
            theta = random.uniform(0, 2 * math.pi)

            # Calcular x e y segun el angulo
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
        stim.sf = frecuencia_espacial
        stim.orientation = orientacion
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
        logs_parametros_trial.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}"
        )
        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim.setPhase(frecuencia_temporal,'+')
        #stim.setPhase(0.01,'+')
        stim.draw()

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region.pos[0])**2 + (gaze_position[1] - foveal_region.pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs.setText("El ratón está dentro de la circunferencia")
            # Aquí puedes hacer que el estímulo grating sea visible si es necesario
              # o cualquier acción que quieras realizar
        else:
            logs.setText("El ratón está fuera de la circunferencia")
            # El ratón está fuera de la circunferencia
            # Aquí puedes hacer que el estímulo grating sea invisible si es necesario
            # o cualquier acción que quieras realizar

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent periphereal_region
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent foveal_region
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial
      letterHeight = 0.025
      pos = (0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SliderComponent slider
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    GratingComponent stim
      color [set every repeat] = color_r, color_g, color_b
      contrast [set every repeat] = contraste
      mask = gauss
      opacity = 0.7
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine break_5s_
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Parvocelular_test
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.iohub import launchHubServer
        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0
      Begin Routine:
        import math
        import random

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = 0,0
        stim_2.sf = frecuencia_espacial
        stim_2.orientation = orientacion
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_2.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
        logs_parametros_trial_2.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}"
        )

        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim_2.setPhase(frecuencia_temporal,'+')
        #stim_2.setPhase(0.01,'+')
        stim_2.draw()

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_2.pos[0])**2 + (gaze_position[1] - foveal_region_2.pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_2.setText("El ratón está dentro de la circunferencia")
            # Aquí puedes hacer que el estímulo grating sea visible si es necesario
              # o cualquier acción que quieras realizar
        else:
            logs_2.setText("El ratón está fuera de la circunferencia")
            # El ratón está fuera de la circunferencia
            # Aquí puedes hacer que el estímulo grating sea invisible si es necesario
            # o cualquier acción que quieras realizar

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent foveal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs_2
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_2
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_2
      letterHeight = 0.025
      pos = (0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    GratingComponent stim_2
      color [set every repeat] = color_r,color_g,color_b
      contrast [set every repeat] = contraste
      mask = gauss
      opacity = 0.7
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every frame] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine calibration_routine
    RoutineSettingsComponent calibration_routine
      disabled = True
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0.5
      Each Frame:
        #periphereal_region_diameter = 0.5

        if slider_3.getRating() is not None:
            periphereal_region_diameter = slider_3.getRating()

        log_calibration.setText(f"Foveal region diameter: {periphereal_region_diameter:.2f}")
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.015
      pos = (0.45, 0.450)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Click here when calibrated
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    PolygonComponent periphereal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every frame] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    TextComponent log_calibration
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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Flow
  Routine calibration_routine
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = settings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 0.8667), ('color_g', 0.8667), ('color_b', 0.8667)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 0.0), ('color_g', 0.0), ('color_b', 0.0)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1.0), ('color_g', 1.0), ('color_b', 1.0)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.4), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 0.5), ('color_g', 0.5), ('color_b', 0.5)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('frecuencia_espacial', 1), ('frecuencia_temporal', 0.0), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', None), ('color_g', None), ('color_b', None)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', None), ('color_g', None), ('color_b', None)]),
      OrderedDict([('intento', 7), ('orientacion', 45), ('frecuencia_espacial', 20), ('frecuencia_temporal', 0.005), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', None), ('color_g', None), ('color_b', None)])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
    Routine Magnocelular_test
  LoopTerminator trials
  Routine break_5s_
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 5:10
    conditionsFile = settings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.4), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('frecuencia_espacial', 1), ('frecuencia_temporal', 0.0), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.01), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 7), ('orientacion', 45), ('frecuencia_espacial', 20), ('frecuencia_temporal', 0.005), ('contraste', None), ('color', None), ('tamanyo', None)]),
      OrderedDict([('intento', 8), ('orientacion', 135), ('frecuencia_espacial', 25), ('frecuencia_temporal', 0.01), ('contraste', None), ('color', None), ('tamanyo', None)])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
    Routine Parvocelular_test
  LoopTerminator trials_2
  Routine break_5s_
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 10:15
    conditionsFile = settings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.4)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('frecuencia_espacial', 1), ('frecuencia_temporal', 0.0)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.01)]),
      OrderedDict([('intento', 7), ('orientacion', 45), ('frecuencia_espacial', 20), ('frecuencia_temporal', 0.005)]),
      OrderedDict([('intento', 8), ('orientacion', 135), ('frecuencia_espacial', 25), ('frecuencia_temporal', 0.01)]),
      OrderedDict([('intento', 9), ('orientacion', 45), ('frecuencia_espacial', 30), ('frecuencia_temporal', 0.005)]),
      OrderedDict([('intento', 10), ('orientacion', 135), ('frecuencia_espacial', 35), ('frecuencia_temporal', 0.01)]),
      OrderedDict([('intento', 11), ('orientacion', 45), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1)]),
      OrderedDict([('intento', 12), ('orientacion', 135), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01)]),
      OrderedDict([('intento', 13), ('orientacion', 45), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05)])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
    Routine Magnocelular_test
  LoopTerminator trials_3
